CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:427
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:raw
    Name the output image:Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:850,1950
    Top and bottom rectangle positions:1000,2100
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    Remove empty rows and columns?:All
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
ColorToGray:[module_num:6|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notes:['Separate the different colors into different channels, so it is easier to segmentate subcellular components (red=nuclei; green=membrane).']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
    Select the input image:Crop
    Conversion method:Split
    Image type:RGB
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    Convert red to gray?:Yes
    Name the output image:raw_red
    Convert green to gray?:Yes
    Name the output image:raw_green
    Convert blue to gray?:Yes
    Name the output image:raw_blue
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
ColorToGray:[module_num:7|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notes:['Obtain the original image in grayscale.']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
    Select the input image:Crop
    Conversion method:Combine
    Image type:RGB
    Name the output image:raw_gray
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
Smooth:[module_num:8|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
    Select the input image:raw_red
    Name the output image:smooth_red
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7.0
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
ReduceNoise:[module_num:9|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
    Select the input image:smooth_red
    Name the output image:noise_red
    Size:7
    Distance:11
    Cut-off distance:0.1

Threshold:[module_num:10|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notes:['Thresholding and smoothing the nuclei channel prior to segmentation.']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
    Select the input image:noise_red
    Name the output image:nuclei
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.5,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
RemoveHoles:[module_num:11|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notes:['Remove little holes in the thresholded nuclei.']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
    Select the input image:nuclei
    Name the output image:nuclei_holes
    Size of holes to fill:50

Watershed:[module_num:12|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notes:['Segmentation of the nuclei']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
    Select the input image:nuclei_holes
    Name the output object:watershed_nuclei
    Use advanced settings?:Yes
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:raw_red
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:15
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ErodeObjects:[module_num:13|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notes:['"Seeding" nuclei for membrane']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
    Select the input object:watershed_nuclei
    Name the output object:eroded_nuclei
    Structuring element:disk,5
    Prevent object removal:Yes
    Relabel resulting objects:No

Smooth:[module_num:14|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enabled:False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
    Select the input image:raw_green
    Name the output image:smooth_green
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:7.0
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
ReduceNoise:[module_num:15|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
    Select the input image:raw_green
    Name the output image:noise_green
    Size:7
    Distance:11
    Cut-off distance:0.1

Threshold:[module_num:16|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
    Select the input image:noise_green
    Name the output image:membrane
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
ConvertImageToObjects:[module_num:17|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
    Select the input image:membrane
    Name the output object:object_membrane
    Convert to boolean image:No
    Preserve original labels:Yes
    Background label:0
    Connectivity:0

ErodeObjects:[module_num:18|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enabled:False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
    Select the input object:object_membrane
    Name the output object:eroded_nuclei
    Structuring element:disk,1
    Prevent object removal:Yes
    Relabel resulting objects:No

RemoveHoles:[module_num:19|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enabled:False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
    Select the input image:organoid
    Name the output image:organoid_holes
    Size of holes to fill:50

MeasureObjectIntensityDistribution:[module_num:20|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
    Select images to measure:raw_gray
    Hidden:1
    Hidden:1
    Hidden:1
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:object_membrane
    Object to use as center?:Edges of other objects
    Select objects to use as centers:watershed_nuclei
    Scale the bins?:Yes
    Number of bins:10
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    Image:raw_gray
    Objects to display:Do not use
    Number of bins:6
    Measurement:Fraction at Distance
    Color map:Blues_r
    Save display as image?:No
    Output image name:Heatmap

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:watershed_nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw_gray
    Name the output image:borders
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#0613FF
    Select objects to display:watershed_nuclei

OverlayObjects:[module_num:23|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
    Input:raw_gray
    Name the output image:filler
    Objects:watershed_nuclei
    Opacity:0.5

OverlayObjects:[module_num:24|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
    Input:raw_gray
    Name the output image:membrane_img
    Objects:watershed_membrane
    Opacity:0.5

OverlayObjects:[module_num:25|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
    Input:membrane_img
    Name the output image:membrane_nuclei_img
    Objects:watershed_nuclei
    Opacity:0.5

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:borders
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:png
    Output file location:Default Output Folder sub-folder|borders
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:filler
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segment
    Saved file format:png
    Output file location:Default Output Folder sub-folder|filler
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:membrane_img
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_membrane
    Saved file format:png
    Output file location:Default Output Folder sub-folder|membrane
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:membrane_nuclei_img
    Select method for constructing file names:From image filename
    Select image name for file prefix:raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_membrane_nuclei
    Saved file format:png
    Output file location:Default Output Folder sub-folder|membrane_nuclei
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:30|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\cellprofiler_segmentation\\data
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:morph_
    Overwrite existing files without warning?:No
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